CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "rabies.tif")
    Name to assign these images:rabies
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "cFos")
    Name to assign these images:cfos
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Probabilities_0.tif")
    Name to assign these images:ilastikOutput
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageIntensity:[module_num:5|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
    Select the image to measure:cfos
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageIntensity:[module_num:6|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
    Select the image to measure:rabies
    Measure the intensity only from areas enclosed by objects?:No
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
Smooth:[module_num:7|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enabled:False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
    Select the input image:rabies
    Name the output image:rabies_FilteredImage
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:8|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:ilastikOutput
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):15,25
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:Cells
    Name the output objects:CellsAbove
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:120
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:CellsAbove
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:12|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notes:['The intensity measurements can be exported into a spreadsheet, but sometimes a useful way to process the measurements is to see them overlayed on top of the objects of interest, in this the nuclei.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rabies
    Name the output image:rabies_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:CellsAbove

MeasureObjectIntensity:[module_num:13|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notes:['In addition to colocalization, the intensity of the PH3 probe can be used to classify cells. The intensity can be measured within each nuclei object.']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
    Hidden:1
    Select an image to measure:cfos
    Select objects to measure:CellsAbove

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:rabies
    Select objects to measure:CellsAbove

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:rabies_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:rabies
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
GrayToColor:[module_num:16|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
    Select a color scheme:CMYK
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    Name the output image:ColorImage
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    Select the image to be colored cyan:rabies
    Select the image to be colored magenta:cfos
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    Relative weight for the cyan image:1.0
    Relative weight for the magenta image:1.0
    Relative weight for the yellow image:1.0
    Relative weight for the brightness image:1.0
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:ImageCombination
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:CellsAbove

DisplayDataOnImage:[module_num:18|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notes:["We'll choose a threshold for the intensity that determines if a cell is mitotic or not. The MaxIntensity is an effective measurement, since the probe itself is so specific."]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
    Display object or image measurements?:Object
    Select the input objects:CellsAbove
    Measurement to display:Intensity_MeanIntensity_cfos
    Select the image on which to display the measurements:ImageCombination
    Text color:#F00000
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:rabies
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_processed
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\SWC\\Data\\Microscopy_Data\\Rabies_Tracing\\ToS-D1_D2\\Analysis_Test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:CellsAbove|Number_Object_Number,CellsAbove|Intensity_MassDisplacement_cfos,CellsAbove|Intensity_MassDisplacement_rabies,CellsAbove|Intensity_MinIntensity_cfos,CellsAbove|Intensity_MinIntensity_rabies,CellsAbove|Intensity_StdIntensity_cfos,CellsAbove|Intensity_StdIntensity_rabies,CellsAbove|Intensity_IntegratedIntensityEdge_cfos,CellsAbove|Intensity_IntegratedIntensityEdge_rabies,CellsAbove|Intensity_MinIntensityEdge_cfos,CellsAbove|Intensity_MinIntensityEdge_rabies,CellsAbove|Intensity_IntegratedIntensity_cfos,CellsAbove|Intensity_IntegratedIntensity_rabies,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:CellsAbove
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
